opentrons/protocol-designer 8.1.1
schemaVersion: 8
protocolName: PBSwash_post_FibronectinandPolysinecoating_2patient
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labwareLocationUpdate:
  GREINER 384: {loadName: greiner_bio_one_384_well_plate_100ul_reduced_well_size, namespace: custom_beta, version: 1, location: 6}
  Integra - 150mL PBS: {loadName: integra150ml_1_reservoir_150000ul, namespace: custom_beta, version: 1, location: 5}
  Integra - 150mL wash: {loadName: integra150ml_1_reservoir_150000ul, namespace: custom_beta, version: 1, location: 9}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 1}
  Opentrons OT-2 96 Tip Rack 300 µL (1): {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 4}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - Cells: {description: 90ul}
  - PBS: {description: 50mL}
  - waste_pbs: {description: 100mL}
ingredLocations:
  GREINER 384:
    Cells {volume: 90}: A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21
  Integra - 150mL PBS:
    PBS {volume: 100000}: A1
  Integra - 150mL wash:
    waste_pbs {volume: 20000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiDispense
  changeTip: once
  aspirate_labware: Integra - 150mL PBS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: GREINER 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiAspirate
  changeTip: once
  aspirate_labware: GREINER 384
  aspirate_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
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  aspirate_mmFromBottom: 2.5
  dispense_labware: Integra - 150mL wash
  dispense_wells: A1
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiDispense
  changeTip: once
  aspirate_labware: Integra - 150mL PBS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: GREINER 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiAspirate
  changeTip: once
  aspirate_labware: GREINER 384
  aspirate_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
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  aspirate_mmFromBottom: 2.5
  dispense_labware: Integra - 150mL wash
  dispense_wells: A1
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiDispense
  changeTip: once
  aspirate_labware: Integra - 150mL PBS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: GREINER 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiAspirate
  changeTip: once
  aspirate_labware: GREINER 384
  aspirate_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
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  aspirate_mmFromBottom: 2.5
  dispense_labware: Integra - 150mL wash
  dispense_wells: A1
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiDispense
  changeTip: once
  aspirate_labware: Integra - 150mL PBS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: GREINER 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 60
  path: multiAspirate
  changeTip: once
  aspirate_labware: GREINER 384
  aspirate_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
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  aspirate_mmFromBottom: 2.5
  dispense_labware: Integra - 150mL wash
  dispense_wells: A1
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 55
  path: multiDispense
  changeTip: once
  aspirate_labware: Integra - 150mL PBS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: GREINER 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 90
  path: multiAspirate
  changeTip: once
  aspirate_labware: GREINER 384
  aspirate_wells: A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21
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  aspirate_mmFromBottom: 1.8
  dispense_labware: Integra - 150mL wash
  dispense_wells: A1
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/greiner_bio_one_384_well_plate_100ul_reduced_well_size/1:
    brand: {brand: Greiner Bio-One, brandId: [781091]}
    metadata: {displayName: Greiner Bio-One 384 Well plate 100ul REDUCED WELL SIZE, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: greiner_bio_one_384_well_plate_100ul_reduced_well_size}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.5, totalLiquidVolume: 100, shape: rectangular, xDimension: 1, yDimension: 1, x: 12.13, y: 76.49, z: 2.9}
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  custom_beta/integra150ml_1_reservoir_150000ul/1:
    brand: {brand: Integra - 150mL, brandId: [Integra, 6308]}
    metadata: {displayName: Integra - 150mL 1 Reservoir 150000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 26}
    parameters: {format: irregular, quirks: [centerMultichannelOnWells, touchTipDisabled], isTiprack: false, isMagneticModuleCompatible: false, loadName: integra150ml_1_reservoir_150000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 22, totalLiquidVolume: 150000, shape: rectangular, xDimension: 112, yDimension: 72, x: 64, y: 42.48, z: 4}
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 260, labwareId: Integra - 150mL PBS, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 60, labwareId: GREINER 384, wellName: A3, wellLocation: {origin: bottom, offset: {z: 3.5, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 60, labwareId: GREINER 384, wellName: B3, wellLocation: {origin: bottom, offset: {z: 3.5, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 60, labwareId: GREINER 384, wellName: A4, wellLocation: {origin: bottom, offset: {z: 3.5, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 60, labwareId: GREINER 384, wellName: B4, wellLocation: {origin: bottom, offset: {z: 3.5, x: 0, y: 0}}, flowRate: 94}
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