opentrons/protocol-designer 8.1.1
schemaVersion: 8
protocolName: PAAGel_2Patient_10mL_12wellnestto384well_OVP
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labwareLocationUpdate:
  greiner 384: {loadName: greiner_bio_one_384_well_plate_100ul_reduced_well_size, namespace: custom_beta, version: 1, location: 6}
  12 well nest: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 1}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - PAA GEL mix 2.5%
  - Cells: {description: 40ul}
ingredLocations:
  12 well nest:
    PAA GEL mix 2.5% {volume: 4000}: A1
  greiner 384:
    Cells {volume: 40}: A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: A3, B3, A4, B4, A5, B5, A6
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 270
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: B6, A7, B7, A8, B8, A9, B9
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 270
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: A10, B10, A11, B11, A12, B12, A13
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 270
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: B13, A14, B14, A15, B15, A16, B16
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 270
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: A17, B17, A18, B18, A19, B19, A20
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: always
  aspirate_labware: 12 well nest
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 270
  aspirate_mmFromBottom: 1
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 1
  aspirate_delay_seconds: 1
  dispense_labware: greiner 384
  dispense_wells: B20, A21, B21
  dispense_flowRate: 45
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: trashBin
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/greiner_bio_one_384_well_plate_100ul_reduced_well_size/1:
    brand: {brand: Greiner Bio-One, brandId: [781091]}
    metadata: {displayName: Greiner Bio-One 384 Well plate 100ul REDUCED WELL SIZE, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: greiner_bio_one_384_well_plate_100ul_reduced_well_size}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.5, totalLiquidVolume: 100, shape: rectangular, xDimension: 1, yDimension: 1, x: 12.13, y: 76.49, z: 2.9}
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: 12 well nest, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- waitForDuration: {seconds: 1}
- dispense: {pipetteId: p300_multi_gen2, volume: 300, labwareId: 12 well nest, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 45}
- waitForDuration: {seconds: 1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: 12 well nest, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
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